SelectOptConf("Print_Fiduciary_Marker"); //burn a small square through many Z-planes
ND_RunZSeriesExp();
SelectOptConf("Autofocus"); //Use autofocus to find the best focal plane
StgFocus();
SelectOptConf("Load_ROI"); //capture a 2048 image to load the ROI which is also 2048
CloseAllDocuments(2);
Capture();
ClearMeasROI();
LoadROI(PatternMapPath,1);
ChangeROIType(1,3); //set the desired ROIs as stimulation ROI
ChangeROIType(2,3);
ChangeROIType(3,3);
ChangeROIType(8,3);
ChangeROIType(9,3);
ChangeROIType(12,3);
ChangeROIType(13,3);
ChangeROIType(14,3);
A1ApplyStimulationSettings(); //Apply Stimulation settings in ND stimulation
SelectOptConf("Micropattern"); //Pattern in the number of z planes defined in the ND stimulation settings
ND_RunSequentialStimulationExp(); 
